<ReactionScheme>

<Specie name="CaCbuf" id="CaCbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="Cbuf" id="Cbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaBCa" id="CaBCa" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaB" id="CaB" kdiff="10" kdiffunit="mu2/s"/>
  
  <Reaction name = "CaIn_buffer" id="CaIn_buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaB"/>
    <Product specieID="CaBCa"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaCbufCa+Cbuf" id="CaCbufCa+Cbuf">
    <Reactant specieID="CaCbuf" />
    <Product specieID="Cbuf" />
    <Product specieID="Ca" />
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="CaOut+CbufNULL" id="CaOut_CbufNULL">
    <Reactant specieID="CaOut" />
    <Reactant specieID="Cbuf" />
    <forwardRate>1e-06</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
</ReactionScheme>
