<ReactionScheme>
   <!-- 10.1016/j.tins.2011.03.002 for Glu diffusion-->
  <Specie name="Glu" id="Glu" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="GluOut" id="GluOut" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="GluBuf" id="GluBuf" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="GluGlubuf" id="GluGlubuf" kdiff="320" kdiffunit="mu2/s" />
  <Specie name="Glubuf" id="Glubuf" kdiff="320" kdiffunit="mu2/s" />
<!--https://doi.org/10.1523/JNEUROSCI.5125-04.2005 for astrocytes from adult animals ~ 1 ms-1, juvenile 1/5ms 0.2 ms-1 -->
  <Reaction name = "Glu--GluOut" id="Glu--GluOut">
    <Reactant specieID="Glu"/>
    <Product specieID="GluOut"/>
  
    <forwardRate>1e-3</forwardRate>
    <reverseRate>4e-9</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  
 
  <Reaction name="GluOut+GluBuf--NULL" id="GluOut_buf--NULL">
    <Reactant specieID="Glu" />
    <Reactant specieID="GluBuf" />
    <forwardRate>5e-02</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="GluGlubufGlu+Glubuf" id="GluGlubufGlu+Glubuf">
    <Reactant specieID="GluGlubuf" />
    <Product specieID="Glubuf" />
    <Product specieID="Glu" />
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  
  <Reaction name="GluOut+GlubufNULL" id="GluOut_GlubufNULL">
    <Reactant specieID="GluOut" />
    <Reactant specieID="Glubuf" />
    <forwardRate>1e-05</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  
</ReactionScheme>
