<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="223" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyR2"            id="RyR2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2C1"            id="RyR2C1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2C2"            id="RyR2C2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2C3"            id="RyR2C3"           kdiff="0" kdiffunit="mu2/s"/>  
  <Specie name="RyR2O1"            id="RyR2O1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2O2"            id="RyR2O2"           kdiff="0" kdiffunit="mu2/s"/>
<!-- Stochastic model for correct transitions need K=ker/kef= 0.001uM^4
Keizer and Smith --> 
  <Reaction name = "RyR2e" id="RyR2e">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2C1"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>50e-3</reverseRate>
 </Reaction>

  <Reaction name = "RyR2a" id="RyR2a">
    <Reactant specieID="RyR2C1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2O1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>9600e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "RyR2b" id="RyR2b">
    <Reactant specieID="RyR2O1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2O2" />
    <forwardRate>5e-11</forwardRate>
    <reverseRate>13</reverseRate>
  </Reaction>

   <Reaction name = "RyR2c" id="RyR2c">
    <Reactant specieID="RyR2C2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2O2" />
    <forwardRate>3.3333e-15</forwardRate>
    <reverseRate>66.667e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyR2d" id="RyR2d">
    <Reactant specieID="RyR2C1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2C2" />
    <forwardRate>5000e-15</forwardRate>
    <reverseRate>1.235e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyR2f" id="RyR2f">
    <Reactant specieID="RyR2C2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2C3"/>
    <forwardRate>1e-14</forwardRate>
    <reverseRate>3</reverseRate>
 </Reaction>
  <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
   <Reaction name = "RyR2flux1" id="RyR2flux1">
     <Reactant specieID="RyR2O1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyR2O1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>1.25e-3</reverseRate>
  </Reaction>
  <Reaction name = "RyR2flux2" id="RyR2flux2">
     <Reactant specieID="RyR2O2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyR2O2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>1.25e-3</reverseRate>
  </Reaction>
    
</ReactionScheme>
