<?xml version="1.0"?>
<ReactionScheme>
<!--this part should be identical for all reaction files-->
    <!-- IP3R Model based on Fraiman D, Dawson SP (2004) A model of IP3 receptor with a luminal
       calcium binding site: stochastic simulations and analysis. Cell
       Calcium 35: 403-413, 2004 -->
  
  <!-- Receptor States:
       IP3R  state
       IP3RO  state
       IP3RIP3  bound IP3R
       IP3RC  bound IP3R
       IP3RC2
       IP3RC3
       IP3RC4
       
  -->
  <!-- you can specify the units of the diffusion constant. If they are not specified they are assumed to be micron^2/second, (microns written "mu" here) it should understand microns, mm, and m for distances and seconds and ms for times -->
  <!-- This code is implemented CaMKII_bimols Rns -0.44, 0.28, 0.088. Fix 3 products 2rxns break down to 2nd order rxn : LbARG/IP35P1P2 -->
  <!-- last rxn of IP35p1p2 was wrong reactant:fixed on Aug,8th,2008
   Chosen katp=1 sec(not 10 sec) is enough   -->
  <!-- Suggested by avrama Ca kdiff=600 for helping fast decay on Feb.24th 2009-->

  <!--https://pmc.ncbi.nlm.nih.gov/articles/PMC2774461/-->
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="Ca" id="Ca" kdiff="100." kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA3" id="Cyt_SERCA3" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA3_Ca" id="Cyt_SERCA3_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA3_Ca2" id="Cyt_SERCA3_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s" />
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <!-- Serca - modified from Griffiths 2006  and Bartol 2015 to account 
       for higher affinity of SERCA2b for Ca, k_2 (rev rate of Cyt_SERCA3_1c)
       adjusted as well-->
  <Reaction name = "Cyt_SERCA3_1a" id="Cyt_SERCA3_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA3"/>
    <Product specieID="Cyt_SERCA3_Ca"/>
    
    <forwardRate>6000e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name = "Cyt_SERCA3_1b" id="Cyt_SERCA3_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA3_Ca"/>
    <Product specieID="Cyt_SERCA3_Ca2"/>
        
    <forwardRate>6000e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<!-- Stryer states that serca pumps less than 100 molecules/s
2501/s was Doi et al 2005 value-->
  <Reaction name = "Cyt_SERCA3_1d" id="Cyt_SERCA3_1d">
    <Reactant specieID="Cyt_SERCA3_Ca2"/>
    <Product specieID="CaER" power="2" />
    <Product specieID="Cyt_SERCA3"/>
    <forwardRate>140e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name = "Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER" />
    <Product specieID="LeakER"/>
    <Product specieID="Ca" />

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
</ReactionScheme>
