<?xml version="1.0"?>
<ReactionScheme>
<!-- This is SERCA2 scheme from Bartol et al 2015, originally introduced by Higgins et al 2008 (senior author: James Sneyd)-->
   
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca2" id="ER_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca" id="ER_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA" id="ER_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s" />
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     

  <Reaction name = "Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>2e-4</forwardRate>
    <reverseRate>87.3e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
    
    <forwardRate>1e-4</forwardRate>
    <reverseRate>167.4e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name = "Cyt_SERCA_1c" id="Cyt_SERCA_1c">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="ER_SERCA_Ca2"/>
    <forwardRate>0.6e-3</forwardRate>
    <reverseRate>0.097e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="CaER" />
    <Reactant specieID="ER_SERCA"/>
    <Product specieID="ER_SERCA_Ca"/>
    <forwardRate>3e-7</forwardRate>    
    <reverseRate>30.02-e3</reverseRate>

    <Q10>0.2</Q10>
  </Reaction>

  
  <Reaction name = "Cyt_SERCA_1e" id="Cyt_SERCA_1e">
    
    <Reactant specieID="CaER" />
    <Reactant specieID="ER_SERCA_Ca"/>
    <Product specieID="ER_SERCA_Ca2"/>
    <forwardRate>1e-7</forwardRate>    
    <reverseRate>60.04e-3</reverseRate>

    <Q10>0.2</Q10>
  </Reaction>



  <Reaction name = "Cyt_SERCA_1f" id="Cyt_SERCA_1f">
    <Reactant specieID="ER_SERCA"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>0.4e-3</forwardRate>
    <reverseRate>1.2e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name = "Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER" />
    <Product specieID="LeakER"/>
    <Product specieID="Ca" />

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
</ReactionScheme>
