<ReactionScheme><Specie name="Ca" id="Ca" kdiff="223" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="60" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="20" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="20" kdiffunit="mu2/s"/>
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca2b" id="pmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca2bCa" id="pmca2bCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca2b" id="CaMCa4pmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca2bCa" id="CaMCa4pmca2bCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca2b" id="CaMpmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s"/>

 
  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_0_1" id="CaM_0_1" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_1_0" id="CaM_1_0" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_1_1" id="CaM_1_1" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_1_2" id="CaM_1_2" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_2_1" id="CaM_2_1" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s"/>


  <Reaction name="Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name="Ca_pump2b_1" id="Ca_pump2b_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca2b"/>
    <Product specieID="pmca2bCa"/>

    <forwardRate>80e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_pump2b_2" id="Ca_pump2b_2">
    <Reactant specieID="pmca2bCa"/>
    <Product specieID="pmca2b"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name="Ca_CaMCa4pump2b_1" id="Ca_CaMCa4pump2b_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca2b"/>
    <Product specieID="CaMCa4pmca2bCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump2b_2" id="Ca_CaMCa4pump2b_2">
    <Reactant specieID="CaMCa4pmca2bCa"/>
    <Product specieID="CaMCa4pmca2b"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
 

  <Reaction name="CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>8e-5</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

    <Reaction name="CaMCa4pump2b_bind" id="CaMCa4pump2b_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca2b"/>
    <Product specieID="CaMCa4pmca2b"/>

    <forwardRate>8e-5</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>


  <Reaction name="CaMCa4pump2b_Ca_unbind" id="CaMCa4pump2b_Ca_unbind">
    <Reactant specieID="CaMCa4pmca2b"/>
    <Product specieID="CaMpmca2b"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0314e-3</forwardRate>
    <reverseRate>152.49e-15</reverseRate>
  </Reaction>

  <Reaction name="CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0957e-3</forwardRate>
    <reverseRate>1.006e-15</reverseRate>
  </Reaction>
 

  <Reaction name="CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.0614e-3</forwardRate>

  </Reaction>

  <Reaction name="CaMpump2b_Ca_unbind" id="CaMpump2b_Ca_unbind">
    <Reactant specieID="CaMpmca2b"/>
    <Product specieID="pmca2b"/>
    <Product specieID="CaM"/>
    <forwardRate>0.034e-3</forwardRate>
  </Reaction>
  
  
  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  
  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="reaction1" id="reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM_1_0"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction3" id="reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_0_1"/>
    <Product specieID="CaM_1_1"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction5" id="reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="CaM_1_2"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction7" id="reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_0"/>
    <Product specieID="CaMCa2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction9" id="reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_1"/>
    <Product specieID="CaM_2_1"/>
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction11" id="reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction13" id="reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM_0_1"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction15" id="reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_0_1"/>
    <Product specieID="CaMCa2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction17" id="reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_0"/>
    <Product specieID="CaM_1_1"/>
    <forwardRate>0.01075</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction19" id="reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_1"/>
    <Product specieID="CaM_1_2"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction21" id="reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="CaM_2_1"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction23" id="reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_2_1"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

  
<Specie name="Glu" id="Glu" kdiff="100" kdiffunit="mu2/s"/>
  
  <Specie name="MgluR" id="MgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluR" id="GluMgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="MgluRGq" id="MgluRGq" kdiff="0" kdiffunit="mu2/s"/> 
  <Specie name="Gqabg" id="Gqabg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq" id="GluMgluRGq" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGTP" id="GqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGDP" id="GqaGDP" kdiff="0" kdiffunit="mu2/s"/>  

  <Specie name="Plc" id="Plc" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCa" id="PlcCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTP" id="PlcCaGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcGqaGTP" id="PlcGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Pip2" id="Pip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Pip2_buf" id="Pip2_buf" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Dag" id="Dag" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="DagK" id="DagK" kdiff="3" kdiffunit="mu2/s"/>
  <Specie name="DagKdag" id="DagKdag" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PA" id="PA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PI" id="PI" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PI4P" id="PI4P" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="PlcCaPip2" id="PlcCaPip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTPPip2" id="PlcCaGqaGTPPip2" kdiff="0" kdiffunit="mu2/s"/>
 
 
  <Specie name="IP4" id="IP4" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="IP2" id="IP2" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="I" id="I" kdiff="10" kdiffunit="mu2/s"/>
<Specie name="IP3" id="IP3" kdiff="20." kdiffunit="mu2/s"/>

  <Specie name="IP3K" id="IP3K" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_IP3" id="IP3K_IP3" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P" id="IP5P" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2" id="IP3K_Ca2" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP3" id="IP5P_IP3" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP4" id="IP5P_IP4" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2_IP3" id="IP3K_Ca2_IP3" kdiff="2." kdiffunit="mu2/s"/>

<Reaction name="Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="GluMgluR"/>

        <forwardRate> 2e-7 </forwardRate>
        <reverseRate> 0.5e-03      </reverseRate>
    </Reaction>

    <Reaction name="Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate>  0.009e-03  </forwardRate>
        <reverseRate>   1.36e-03  </reverseRate>
    </Reaction>

  <Reaction name="Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="MgluRGq"/>

        <forwardRate> 4.5e-7 </forwardRate>
        <reverseRate> 0.68e-03 </reverseRate>
   </Reaction>

   <Reaction name="Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluRGq"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate> 0.004e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
   </Reaction>

   <Reaction name="GluMgluRGq--GqaGTP+GluMgluRGbg" id="GluMgluRGq--GqaGTP+GluMgluRGbg">
        <Reactant specieID="GluMgluRGq"/>
        <Product specieID="GqaGTP"/>
        <Product specieID="GluMgluR"/> 
  
        <forwardRate>  1.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

 

  <Reaction name="Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcCa"/>

    <forwardRate> 0.0005e-03   </forwardRate>
    <reverseRate> 1e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  
  <Reaction name="PlcCa+GqaGTP--PlcCaGqaGTP" id="PlcCa+GqaGTP--PlcCaGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcCa"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 3.5e-04   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  <Reaction name="Plc+GqaGTP--PlcGqaGTP" id="Plc+GqaGTP--PlcGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcGqaGTP"/>

    <forwardRate> 7e-04   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcGqaGTP+Ca--PlcCaGqaGTP" id="PlcGqaGTP+Ca--PlcCaGqaGTP">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 0.0025e-03   </forwardRate>
    <reverseRate> 1.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


 
  <Reaction name="PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
    <Reactant specieID="PlcCa"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaPip2"/>
    
    <forwardRate> 6e-8   </forwardRate>
    <reverseRate> 1.2e-3   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


  
  
<Reaction name="PlcCaPip2+GqaGTP--PlcCaPip2GqaGTP" id="PlcCaPip2+GqaGTP--PlcPip2GqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcCaPip2"/>
    <Product specieID="PlcCaGqaGTPPip2"/>

    <forwardRate>7e-03   </forwardRate>
    <reverseRate> 0.7e-02        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  

  <Reaction name="PlcCaPip2--PlcCaDag+IP3" id="PlcCaPip2--PlcCaDag+IP3">
    <Reactant specieID="PlcCaPip2"/>
    <Product specieID="PlcCa"/>
    <Product specieID="IP3"/>
    <Product specieID="Dag"/>
    
    <forwardRate> 0.3e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>




  <Reaction name="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2" id="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaGqaGTPPip2"/>
    
    <forwardRate>  3e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3" id="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3">
    <Reactant specieID="PlcCaGqaGTPPip2"/>
    <Product specieID="PlcCaGqaGTP"/>
    <Product specieID="IP3"/>
    <Product specieID="Dag"/>
    
    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
  </Reaction>
<Reaction name="PlcGqa--Plc+GqaGDP" id="PlcGqa--Plc+GqaGDP">
        <Reactant specieID="PlcGqaGTP"/>
        <Product specieID="Plc"/>
        <Product specieID="GqaGDP"/>

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

<Reaction name="PlcCaGqa--PlcCa+GaGDP" id="PlcCaGqa--Plc+GaGDP">
        <Reactant specieID="PlcCaGqaGTP"/>
        <Product specieID="PlcCa"/>
        <Product specieID="GqaGDP"/>

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>
  


	<Reaction name="DagKdag1" id="DagKdag1">
         <Reactant specieID="Dag"/>
         <Reactant specieID="DagK"/>
         <Product specieID="DagKdag"/>

        <forwardRate> 0.00007e-03    </forwardRate>
        <reverseRate> 0.8e-3         </reverseRate>
    </Reaction>

    <Reaction name="DagKdag2" id="DagKdag2">
      <Reactant specieID="DagKdag"/>
      <Product specieID="PA"/>
      <Product specieID="DagK"/>

      <forwardRate> 0.2e-03      </forwardRate>
      <reverseRate> 0.0e-03      </reverseRate>
    </Reaction>
    
  <Reaction name="IP3--IP5P" id="IP3--IP5P">
    <Reactant specieID="IP3"/>
    <Reactant specieID="IP5P"/>
    <Product specieID="IP5P_IP3"/>
    
    <forwardRate> 9e-06      </forwardRate>
    <reverseRate> 72e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3--IP5P-degrad" id="IP3--IP5P-degrad">
    <Reactant specieID="IP5P_IP3"/>
    <Product specieID="IP5P"/>
    <Product specieID="IP2"/>
    <forwardRate> 18e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 <Reaction name="IP4--IP5P" id="IP4--IP5P">
    <Reactant specieID="IP4"/>
    <Reactant specieID="IP5P"/>
    <Product specieID="IP5P_IP4"/>
    
    <forwardRate> 0.95e-04      </forwardRate>
    <reverseRate> 72e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP4--IP5P-degrad" id="IP4--IP5P-degrad">
    <Reactant specieID="IP5P_IP4"/>
    <Product specieID="IP5P"/>
    <Product specieID="IP3"/>
    <forwardRate> 6e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K--2Ca" id="IP3K--2Ca">
    <Reactant specieID="IP3K"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="IP3K_Ca2"/>
    
    <forwardRate> 0.002      </forwardRate>
    <reverseRate> 10e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K2Ca--IP3" id="IP3K2Ca--IP3">
    <Reactant specieID="IP3K_Ca2"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3K_Ca2_IP3"/>

    <forwardRate> 100e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name="IP3K2CaIP3" id="IP3K2CaIP3">
  <Reactant specieID="IP3K_Ca2_IP3"/>
  <Product specieID="IP4"/>
  <Product specieID="IP3K_Ca2"/>

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>


<Reaction name="IP3K--IP3" id="IP3K--IP3">
    <Reactant specieID="IP3K"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3K_IP3"/>

    <forwardRate> 33e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name="IP3KIP3" id="IP3KIP3">
  <Reactant specieID="IP3K_IP3"/>
  <Product specieID="IP4"/>
  <Product specieID="IP3K"/>

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>





<Reaction name="I2-to-I" id="I2-to-I">
    <Reactant specieID="IP2"/>   
    <Product specieID="I"/>

    <forwardRate> 2.0e-5    </forwardRate>
    <reverseRate> 0    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>


<Reaction name="PA-to-PI" id="PA-to-PI">
  <Reactant specieID="PA"/>
  <Reactant specieID="I"/>   
  <Product specieID="PI"/>

    <forwardRate> 2.0e-6  </forwardRate>
    <reverseRate> 1e-3    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PI-to-PI4P" id="PI-to-PI4P">
    <Reactant specieID="PI"/>   
    <Product specieID="PI4P"/>

    <forwardRate> 2.16e-5    </forwardRate>
    <reverseRate> 0.116e-3    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PI4P-to-PIP2" id="PI4P-to-PIP2">
    <Reactant specieID="PI4P"/>   
    <Product specieID="Pip2"/>

    <forwardRate> 1.5e-5    </forwardRate>
    <reverseRate> 0.000162  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="Pip2buf" id="Pip2buf">
    <Reactant specieID="Pip2"/>   
    <Product specieID="Pip2_buf"/>

    <forwardRate> 2    </forwardRate>
    <reverseRate>  1   </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<Reaction name="PlcGqaGTP--Plc+GqaGDP" id="PlcGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="Plc"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PlcCaGqaGTP--PlcCa+GqaGDP" id="PlcCaGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Product specieID="PlcCa"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<Reaction name="GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"/>
  <Product specieID="Gqabg"/>

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>




    

<Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  
  <Specie name="IP3R" id="IP3R" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RIP3" id="IP3RIP3" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RO" id="IP3RO" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC" id="IP3RC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC2" id="IP3RC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC3" id="IP3RC3" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="IP3RC4" id="IP3RC4" kdiff="0" kdiffunit="mu2/s"/>
  <Reaction name="IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3RIP3"/>

    <forwardRate> 0.00001   </forwardRate>
    <reverseRate> 0.01       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RO"/>
    
    <forwardRate> 0.00008   </forwardRate>
    <reverseRate> .02    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name="IP3R+Ca" id="IP3R+Ca">                                                                      
    <Reactant specieID="IP3R"/>                                                                      
    <Reactant specieID="Ca"/>                                                                     
    <Product specieID="IP3RC"/>                                                                 
                                                                                                                
    <forwardRate> 2.22e-6  </forwardRate>                                                                       
    <reverseRate> 5e-3      </reverseRate>                                                                      
    <Q10>         0.2           </Q10>                                                                          
  </Reaction>                                                                                                   
                                                                                                                
  <Reaction name="IP3RC+Ca" id="IP3C+Ca">
  <Reactant specieID="IP3RC"/>
      <Reactant specieID="Ca"/>

    <Product specieID="IP3RC2"/>

    <forwardRate> 4.44e-6   </forwardRate>
    <reverseRate> 10e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RC2+Ca" id="IP3C2+Ca">
    <Reactant specieID="IP3RC2"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC3"/>
    
    <forwardRate> 6.66e-6   </forwardRate>
    <reverseRate> 15e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  <Reaction name="IP3RC3+Ca" id="IP3C3+Ca">
    <Reactant specieID="IP3RC3"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC4"/>
    
    <forwardRate> 8.88e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
 
<Reaction name="IP3R_Ob-flux_Ia" id="IP3R_Ob-fluxa">
    <Reactant specieID="IP3RO"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3RO"/>
    <Product specieID="Ca"/>

    <forwardRate> 5.555666666666666e-05 </forwardRate>
    <reverseRate> 1.8518888888888888e-05      </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>
    

 <Specie name="GluOut" id="GluOut" kdiff="320" kdiffunit="mu2/s"/>
  <Specie name="GluBuf" id="GluBuf" kdiff="320" kdiffunit="mu2/s"/>
  <Specie name="GluGlubuf" id="GluGlubuf" kdiff="320" kdiffunit="mu2/s"/>
  <Specie name="Glubuf" id="Glubuf" kdiff="320" kdiffunit="mu2/s"/>
<Reaction name="Glu--GluOut" id="Glu--GluOut">
    <Reactant specieID="Glu"/>
    <Product specieID="GluOut"/>
  
    <forwardRate>1e-3</forwardRate>
    <reverseRate>4e-9</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  
 
  <Reaction name="GluOut+GluBuf--NULL" id="GluOut_buf--NULL">
    <Reactant specieID="Glu"/>
    <Reactant specieID="GluBuf"/>
    <forwardRate>5e-02</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="GluGlubufGlu+Glubuf" id="GluGlubufGlu+Glubuf">
    <Reactant specieID="GluGlubuf"/>
    <Product specieID="Glubuf"/>
    <Product specieID="Glu"/>
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  
  <Reaction name="GluOut+GlubufNULL" id="GluOut_GlubufNULL">
    <Reactant specieID="GluOut"/>
    <Reactant specieID="Glubuf"/>
    <forwardRate>1e-06</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  
<Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>50e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="NMDARC" id="NMDARC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC1" id="NMDARC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC2" id="NMDARC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARD" id="NMDARD" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARO" id="NMDARO" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARCB" id="NMDARCB" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC1B" id="NMDARC1B" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC2B" id="NMDARC2B" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARDB" id="NMDARDB" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDAROB" id="NMDAROB" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="V" id="V" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="VOut" id="VOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="VBuf" id="VBuf" kdiff="10" kdiffunit="mu2/s"/>
<Reaction name="NMDARC-C1" id="NMDARC-C1">
    <Reactant specieID="NMDARC"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC1"/>
    <forwardRate>2e-5</forwardRate>
    <reverseRate>11e-3</reverseRate>
 </Reaction>

  <Reaction name="NMDARC1-C2" id="NMDARC1-C2">
    <Reactant specieID="NMDARC1"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC2"/>
    <forwardRate>16.8e-3</forwardRate>
    <reverseRate>3.6e-3</reverseRate>
 </Reaction>
   

  <Reaction name="NMDARC2-D" id="NMDARC2-D">
    <Reactant specieID="NMDARC2"/>
    <Product specieID="NMDARD"/>
    <forwardRate>8.4e-3</forwardRate>
    <reverseRate>6.8e-3</reverseRate>
  </Reaction>

   <Reaction name="NMDARC2-0" id="NMDARC2-0">
    <Reactant specieID="NMDARC2"/>
    <Product specieID="NMDARO"/>
    <forwardRate>93e-3</forwardRate>
    <reverseRate>183.2e-3</reverseRate>
  </Reaction>


  <Reaction name="NMDARCB-C1B" id="NMDARCB-C1B">
    <Reactant specieID="NMDARCB"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC1B"/>
    <forwardRate>2e-5</forwardRate>
    <reverseRate>11e-3</reverseRate>
 </Reaction>

  <Reaction name="NMDARC1B-C2B" id="NMDARC1-C2B">
    <Reactant specieID="NMDARC1B"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC2B"/>
    <forwardRate>1e-6</forwardRate>
    <reverseRate>22e-3</reverseRate>
 </Reaction>
   

  <Reaction name="NMDARC2B-DB" id="NMDARC2B-DB">
    <Reactant specieID="NMDARC2B"/>
    <Product specieID="NMDARDB"/>
    <forwardRate>16.8e-3</forwardRate>
    <reverseRate>3.6e-3</reverseRate>
  </Reaction>

   <Reaction name="NMDARC2B-0B" id="NMDARC2B-0B">
    <Reactant specieID="NMDARC2B"/>
    <Product specieID="NMDAROB"/>
    <forwardRate>97e-3</forwardRate>
    <reverseRate>574e-3</reverseRate>
  </Reaction>

  <Reaction name="NMDAROB-NMDARO" id="NMDAROB-NMDARO">
    <Reactant specieID="NMDAROB"/>
    <Reactant specieID="V"/>
    <Product specieID="NMDARO"/>
    <Product specieID="V"/>
    <forwardRate>20</forwardRate>
    <reverseRate>1</reverseRate>
  </Reaction>

  <Reaction name="NMDARO-NMDAROB" id="NMDARO-NMDAROB">
    <Reactant specieID="NMDARO"/>
    <Product specieID="NMDAROB"/>
    <forwardRate>65</forwardRate>
  </Reaction>

  <Reaction name="NMDAROflux" id="NMDARO-flux">
    <Reactant specieID="NMDARO"/>
    <Reactant specieID="CaOut"/>
    <Product specieID="NMDARO"/>
    <Product specieID="Ca"/>
    <forwardRate>1e-5</forwardRate>
    <reverseRate>1e-5</reverseRate>
  </Reaction>

  

   <Reaction name="V--VOut" id="V--VOut">
    <Reactant specieID="V"/>
    <Product specieID="VOut"/>
  
    <forwardRate>0.5e-1</forwardRate>
    <reverseRate>0.02e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
   <Reaction name="V+VBuf-\-NULL" id="V_buf-\-NULL"> 
     <Reactant specieID="V"/> 
     <Reactant specieID="VBuf"/> 
     <forwardRate>5e-05</forwardRate> 
   <reverseRate>0</reverseRate> 
  </Reaction> 

  <Specie name="PP2B" id="PP2B" kdiff="0.61" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="1" kdiffunit="mu2/s"/>
  <Specie name="PP1" id="PP1" kdiff="8" kdiffunit="mu2/s"/>
  <Specie name="PM" id="PM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PKCc" id="PKCc" kdiff="6.61" kdiffunit="mu2/s"/>
  <Specie name="CaPKCc" id="CaPKCc" kdiff="6.61" kdiffunit="mu2/s"/>

  <Specie name="CaPKC" id="CaPKC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2PKC" id="Ca2PKC" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Ca2PKC_act" id="Ca2PKC_act" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaPKC_act" id="CaPKC_act" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Dag_Ca2PKC_act" id="Dag_Ca2PKC_act" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Dag_CaPKC_act" id="Dag_CaPKC_act" kdiff="0" kdiffunit="mu2/s"/>
 
  <Specie name="Ca2PKC_actNg" id="Ca2PKC_actNg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2PKC_actNgPA" id="Ca2PKC_actNgPA" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="CaPKC_actNg" id="CaPKC_actNg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaPKC_actNgPA" id="CaPKC_actNgPA" kdiff="0" kdiffunit="mu2/s"/>

   <Specie name="Dag_Ca2PKC_actNg" id="Dag_Ca2PKC_actNg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Dag_Ca2PKC_actNgPA" id="Dag_Ca2PKC_actNgPA" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="Dag_CaPKC_actNg" id="Dag_CaPKC_actNg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Dag_CaPKC_actNgPA" id="Dag_CaPKC_actNgPA" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="pNg" id="pNg" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="pNgPP2BCaMCa4" id="pNgPP2BCaMCa4" kdiff="1" kdiffunit="mu2/s"/>
  <Specie name="pNgPP1" id="pNgPP1" kdiff="6" kdiffunit="mu2/s"/>
  <Specie name="PAPP1" id="PAPP1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgPA" id="NgPA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Lipin" id="Lipin" kdiff="3" kdiffunit="mu2/s"/>
  <Specie name="PALipin" id="PALipin" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PAPP1Lipin" id="PAPP1Lipin" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PANgLipin" id="PANgLipin" kdiff="0" kdiffunit="mu2/s"/>  
 
 
  <Reaction name="CaMCa4+PP2B--PP2BCaMCa4 reac" id="CaMCa4+PP2B--PP2BCaMCa4_id">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate> 6.4e-6       </forwardRate>
    <reverseRate> 3.19e-6      </reverseRate>
  </Reaction>
  <Reaction name="NgPA_bind" id="NgPA_bind">
    <Reactant specieID="PA"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgPA"/>
    <forwardRate>0.0000036</forwardRate>
    <reverseRate>36.e-5</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


<Reaction name="PKCc+Ca--CaPKCc" id="PKCc+Ca--CaPKCc">
        <Reactant specieID="Ca"/>
        <Reactant specieID="PKCc"/>
        <Product specieID="CaPKCc"/>

        <forwardRate> 13.3e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKCc--CaPKC" id="CaPKCc--CaPKC">
      <Reactant specieID="CaPKCc"/>
      <Reactant specieID="PM"/>
      <Product specieID="CaPKC"/>
      <forwardRate> 4e-6   </forwardRate>
      <reverseRate> 17e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKC+Ca--Ca2PKC" id="CaPKC+Ca--Ca2PKC">
        <Reactant specieID="Ca"/>
        <Reactant specieID="CaPKC"/>
        <Product specieID="Ca2PKC"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="Ca2PKC--Ca2PKC_act" id="Ca2PKC--Ca2PKC_act">
        <Reactant specieID="Ca2PKC"/>
        <Product specieID="Ca2PKC_act"/>
        <forwardRate> 3e-3   </forwardRate>
        <reverseRate> 5e-3       </reverseRate>
    </Reaction>
    <Reaction name="CaPKC_act+Ca--Ca2PKC_act" id="CaPKC_act+Ca--Ca2PKC_act">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="Ca"/>
        <Product specieID="Ca2PKC_act"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="Dag_CaPKC_act+Ca--Ca2PKC_act" id="Dag_CaPKC_act+Ca--Ca2PKC_act">
        <Reactant specieID="Dag_CaPKC_act"/>
        <Reactant specieID="Ca"/>
        <Product specieID="Dag_Ca2PKC_act"/>

        <forwardRate> 1e-6   </forwardRate>
        <reverseRate> 12e-3       </reverseRate>
    </Reaction>

    <Reaction name="CaPKC_act--CaPKC" id="CaPKC_act--CaPKC">
        <Reactant specieID="CaPKC_act"/>
        <Product specieID="CaPKC"/>

        <forwardRate> 5e-3   </forwardRate>
        <reverseRate> 0 </reverseRate>
    </Reaction>


     <Reaction name="Ca2PKC_act+Dag--Dag_Ca2PKC_act" id="Ca2PKC_act+Dag--Dag_Ca2PKC_act">
        <Reactant specieID="Ca2PKC_act"/>
        <Reactant specieID="Dag"/>
        <Product specieID="Dag_Ca2PKC_act"/>

        <forwardRate> 0.8e-7   </forwardRate>
        <reverseRate> 1e-3       </reverseRate>
     </Reaction>

     <Reaction name="CaPKC_act+Dag--Dag_CaPKC_act" id="CaPKC_act+Dag--Dag_CaPKC_act">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="Dag"/>
        <Product specieID="Dag_CaPKC_act"/>

        <forwardRate> 0.8e-7   </forwardRate>
        <reverseRate> 1e-3       </reverseRate>
    </Reaction>

    
    
  <Reaction name="Ca2PKC_act +Ng--Ca2PKC_actNg" id="Ca2PKC_act+Ng--Ca2PKC_actNg">
        <Reactant specieID="Ca2PKC_act"/>
        <Reactant specieID="Ng"/>
        <Product specieID="Ca2PKC_actNg"/>

        <forwardRate> 0.0001238   </forwardRate>
        <reverseRate> 1.5e-2        </reverseRate>
    </Reaction>
    <Reaction name="Ca2PKC_actNgphos" id="Ca2PKC_actNgphos">
        <Reactant specieID="Ca2PKC_actNg"/>
        <Product specieID="pNg"/>
        <Product specieID="Ca2PKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>

    <Reaction name="Ca2PKC_act +NgPA--Ca2PKC_actNg" id="Ca2PKC_act+NgPA--Ca2PKC_actNg">
        <Reactant specieID="Ca2PKC_act"/>
        <Reactant specieID="NgPA"/>
        <Product specieID="Ca2PKC_actNgPA"/>

        <forwardRate> 0.0001238   </forwardRate>
        <reverseRate> 1.5e-2        </reverseRate>
    </Reaction>
    <Reaction name="Ca2PKC_actNgPAphos" id="Ca2PKC_actNgPAphos">
        <Reactant specieID="Ca2PKC_actNgPA"/>
        <Product specieID="pNg"/>
	<Product specieID="PA"/>
        <Product specieID="Ca2PKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>

 <Reaction name="CaPKC_act +Ng--CaPKC_actNg" id="CaPKC_act+Ng--CaPKC_actNg">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="Ng"/>
        <Product specieID="CaPKC_actNg"/>

        <forwardRate> 0.0001238   </forwardRate>
        <reverseRate> 1.5e-2        </reverseRate>
    </Reaction>
    
    <Reaction name="CaPKC_actNgphos" id="CaPKC_actNgphos">
        <Reactant specieID="CaPKC_actNg"/>
        <Product specieID="pNg"/>
        <Product specieID="CaPKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>
  <Reaction name="CaPKC_act +NgPA--CaPKC_actNg" id="CaPKC_act+NgPA--CaPKC_actNg">
        <Reactant specieID="CaPKC_act"/>
        <Reactant specieID="NgPA"/>
        <Product specieID="CaPKC_actNgPA"/>

        <forwardRate>0.0001238   </forwardRate>
        <reverseRate> 1.5e-2        </reverseRate>
    </Reaction>
    <Reaction name="CaPKC_actNgPAphos" id="CaPKC_actNgPAphos">
        <Reactant specieID="CaPKC_actNgPA"/>
        <Product specieID="pNg"/>
	<Product specieID="PA"/>
        <Product specieID="CaPKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>



  <Reaction name="Dag_Ca2PKC_act +Ng--Dag_Ca2PKC_actNg" id="Dag_Ca2PKC_act+Ng--Dag_Ca2PKC_actNg">
        <Reactant specieID="Dag_Ca2PKC_act"/>
        <Reactant specieID="Ng"/>
        <Product specieID="Dag_Ca2PKC_actNg"/>

        <forwardRate> 0.0001238   </forwardRate>
        <reverseRate> 1.5e-2        </reverseRate>
    </Reaction>
    <Reaction name="Dag_Ca2PKC_actNgphos" id="Dag_Ca2PKC_actNgphos">
        <Reactant specieID="Dag_Ca2PKC_actNg"/>
        <Product specieID="pNg"/>
        <Product specieID="Dag_Ca2PKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>

    <Reaction name="Dag_Ca2PKC_act +NgPA--Dag_Ca2PKC_actNg" id="Dag_Ca2PKC_act+NgPA--Dag_Ca2PKC_actNg">
        <Reactant specieID="Dag_Ca2PKC_act"/>
        <Reactant specieID="NgPA"/>
        <Product specieID="Dag_Ca2PKC_actNgPA"/>

        <forwardRate> 0.0001238   </forwardRate>
        <reverseRate> 1.5e-2        </reverseRate>
    </Reaction>
    <Reaction name="Dag_Ca2PKC_actNgPAphos" id="Dag_Ca2PKC_actNgPAphos">
        <Reactant specieID="Dag_Ca2PKC_actNgPA"/>
        <Product specieID="pNg"/>
	<Product specieID="PA"/>
        <Product specieID="Dag_Ca2PKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>

 <Reaction name="Dag_CaPKC_act +Ng--Dag_CaPKC_actNg" id="Dag_CaPKC_act+Ng--Dag_CaPKC_actNg">
        <Reactant specieID="Dag_CaPKC_act"/>
        <Reactant specieID="Ng"/>
        <Product specieID="Dag_CaPKC_actNg"/>

        <forwardRate> 0.0001238   </forwardRate>
        <reverseRate> 1.5e-2       </reverseRate>
    </Reaction>
    
    <Reaction name="Dag_CaPKC_actNgphos" id="Dag_CaPKC_actNgphos">
        <Reactant specieID="Dag_CaPKC_actNg"/>
        <Product specieID="pNg"/>
        <Product specieID="Dag_CaPKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>
  <Reaction name="Dag_CaPKC_act +NgPA--Dag_CaPKC_actNg" id="Dag_CaPKC_act+NgPA--Dag_CaPKC_actNg">
        <Reactant specieID="Dag_CaPKC_act"/>
        <Reactant specieID="NgPA"/>
        <Product specieID="Dag_CaPKC_actNgPA"/>

        <forwardRate> 0.0001238   </forwardRate>
        <reverseRate> 1.5e-2        </reverseRate>
    </Reaction>
    <Reaction name="Dag_CaPKC_actNgPAphos" id="Dag_CaPKC_actNgPAphos">
        <Reactant specieID="Dag_CaPKC_actNgPA"/>
        <Product specieID="pNg"/>
	<Product specieID="PA"/>
        <Product specieID="Dag_CaPKC_act"/>

        <forwardRate> 3.571e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>





    
    <Reaction name="pNg +PP2CaMC4--pNgPP2BCaMCa4" id="pNg +PP2CaMC4--pNgPP2BCaMCa4">
        <Reactant specieID="pNg"/>
        <Reactant specieID="PP2BCaMCa4"/>
        <Product specieID="pNgPP2BCaMCa4"/>

        <forwardRate>  1.5395522388059703e-06   </forwardRate>
        <reverseRate> 3.3e-3        </reverseRate>
    </Reaction>
    <Reaction name="pNgPP2BCaMCa4 dephos" id="pNgPP2bCaMCa4 dephos">
        <Reactant specieID="pNgPP2BCaMCa4"/>
        <Product specieID="Ng"/>
        <Product specieID="PP2BCaMCa4"/>

        <forwardRate> 17.33e-3  </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>

    <Reaction name="pNg +PP1--pNgPP1" id="pNg +PP1--pNgPP1">
        <Reactant specieID="pNg"/>
        <Reactant specieID="PP1"/>
        <Product specieID="pNgPP1"/>

        <forwardRate> 8.45e-7   </forwardRate>
        <reverseRate> 3.3e-3       </reverseRate>
    </Reaction>
    <Reaction name="pNgPP1 dephos" id="pNgPP1 dephos">
        <Reactant specieID="pNgPP1"/>
        <Product specieID="Ng"/>
        <Product specieID="PP1"/>

        <forwardRate> 6e-3  </forwardRate>
        <reverseRate> 0        </reverseRate>
    </Reaction>


       <Reaction name="PA +PP1--PAPP1" id="PA +PP1--PAPP1">
        <Reactant specieID="PA"/>
        <Reactant specieID="PP1"/>
        <Product specieID="PAPP1"/>

        <forwardRate> 7.03e-11   </forwardRate>
        <reverseRate> 5.84e-9     </reverseRate>
    </Reaction>

    <Reaction name="Dag - PA cycling1a" id="Dag PA cycling1a">
        <Reactant specieID="PA"/>
        <Reactant specieID="Lipin"/>
        <Product specieID="PALipin"/>
	
        <forwardRate> 1.133e-8  </forwardRate>
        <reverseRate> 1e-3     </reverseRate>
    </Reaction>

    <Reaction name="Dag - PA cycling1b" id="Dag PA cycling1b">
        <Reactant specieID="PALipin"/>
        <Product specieID="Lipin"/>
        <Product specieID="Dag"/>
	
        <forwardRate> 0.7e-3  </forwardRate>
        <reverseRate> 0     </reverseRate>
    </Reaction>

    
     <Reaction name="Dag - PA cycling3a" id="Dag PA cycling3a">
       <Reactant specieID="PAPP1"/>
       <Reactant specieID="Lipin"/>
        <Product specieID="PAPP1Lipin"/>

        <forwardRate> 1.133e-8  </forwardRate>
	<reverseRate> 1e-3  </reverseRate>

     </Reaction>

     <Reaction name="Dag - PA cycling3b" id="Dag PA cycling3b">
       <Reactant specieID="PAPP1Lipin"/>
       <Prodyyct specieID="Lipin"/>
       <Product specieID="Dag"/>
       <Product specieID="PP1"/>
        <forwardRate> 0.7e-3  </forwardRate>
	<reverseRate> 0  </reverseRate>

     </Reaction>

     
    <Reaction name="Dag - PA cycling3a" id="Dag PA cycling4a">
       <Reactant specieID="PANg"/>
       <Reactant specieID="Lipin"/>
        <Product specieID="PANgLipin"/>

        <forwardRate> 1.133e-8  </forwardRate>
	<reverseRate> 1e-3  </reverseRate>

     </Reaction>

     <Reaction name="Dag - PA cycling3b" id="Dag PA cycling4b">
       <Reactant specieID="PANgLipin"/>
       <Prodyyct specieID="Lipin"/>
       <Product specieID="Dag"/>
       <Product specieID="Ng"/>
        <forwardRate> 0.7e-3  </forwardRate>
	<reverseRate> 0  </reverseRate>

     </Reaction>
 
 


<Specie name="PMJ" id="PMJ" kdiff="0." kdiffunit="mu2/s"/>
  <Specie name="PMJ_STIM_4" id="PMJ_STIM_4" kdiff="0." kdiffunit="mu2/s"/>
    
  <Specie name="Orai3STIM_4" id="Orai3STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai2STIM_4" id="Orai2STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="OraiSTIM_4" id="OraiSTIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai" id="Orai" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="STIM_4" id="STIM_4" kdiff="0.01" kdiffunit="mu2/s"/>
  <Specie name="STIM_2" id="STIM_2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="STIM_2CaER" id="STIM_2CaER" kdiff="0" kdiffunit="mu2/s"/>
 
  <Reaction name="SOCE1" id="SOCE1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai3STIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <Product specieID="Ca"/>
    
    <forwardRate>5e-8</forwardRate>
    <reverseRate>5e-8</reverseRate>
  </Reaction>
  <Reaction name="SOCE2" id="SOCE2">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai2STIM_4"/>
    <Product specieID="Orai2STIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-9</forwardRate>
    <reverseRate>1.5e-9</reverseRate>
  </Reaction>

 <Reaction name="SOCE3" id="SOCE3">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-11</forwardRate>
    <reverseRate>1.5e-11</reverseRate>
  </Reaction>
   

  <Reaction name="STIM_dim_1" id="STIM_dim_1">
    <Reactant specieID="STIM_2" power="2"/>
    <Product specieID="STIM_4"/>
    <forwardRate>4.8e-7</forwardRate>
    <reverseRate>11e-5</reverseRate>
  </Reaction>
  

  <Reaction name="STIMCaER_1" id="STIMCaER_1">
    <Reactant specieID="STIM_2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="STIM_2CaER"/>
    <forwardRate>8e-7</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ" id="STIM_PMJ">
    <Reactant specieID="STIM_4"/>
    <Reactant specieID="PMJ"/>
    <Product specieID="PMJ_STIM_4"/>
    <Product specieID="PMJ"/>
    <forwardRate>1.8e-4</forwardRate>
    <reverseRate>3e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ_Orai" id="STIM_PMJ_Orai">
    <Reactant specieID="Orai"/>
    <Reactant specieID="PMJ_STIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <forwardRate>1.5e-04</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai2" id="STIM_Orai2">
    <Reactant specieID="OraiSTIM_4" power="2"/>
    <Product specieID="Orai2STIM_4"/>
    <forwardRate>3.75e-5</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai4" id="STIM_Orai4">
    <Reactant specieID="Orai2STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <forwardRate>9.375e-06</forwardRate>
    <reverseRate>5e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai8" id="STIM_Orai8">
    <Reactant specieID="Orai3STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai2STIM_4" power="2"/>
    <forwardRate>9.375e-06</forwardRate>

  </Reaction>

  
</ReactionScheme>
