<ReactionScheme><Specie name="Ca" id="Ca" kdiff="223" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="60" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="20" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="20" kdiffunit="mu2/s"/>
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca2b" id="pmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca2bCa" id="pmca2bCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca2b" id="CaMCa4pmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca2bCa" id="CaMCa4pmca2bCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca2b" id="CaMpmca2b" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s"/>

 
  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_0_1" id="CaM_0_1" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_1_0" id="CaM_1_0" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_1_1" id="CaM_1_1" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_1_2" id="CaM_1_2" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaM_2_1" id="CaM_2_1" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s"/>


  <Reaction name="Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name="Ca_pump2b_1" id="Ca_pump2b_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca2b"/>
    <Product specieID="pmca2bCa"/>

    <forwardRate>80e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_pump2b_2" id="Ca_pump2b_2">
    <Reactant specieID="pmca2bCa"/>
    <Product specieID="pmca2b"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name="Ca_CaMCa4pump2b_1" id="Ca_CaMCa4pump2b_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca2b"/>
    <Product specieID="CaMCa4pmca2bCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_CaMCa4pump2b_2" id="Ca_CaMCa4pump2b_2">
    <Reactant specieID="CaMCa4pmca2bCa"/>
    <Product specieID="CaMCa4pmca2b"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
 

  <Reaction name="CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>8e-5</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

    <Reaction name="CaMCa4pump2b_bind" id="CaMCa4pump2b_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca2b"/>
    <Product specieID="CaMCa4pmca2b"/>

    <forwardRate>8e-5</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>


  <Reaction name="CaMCa4pump2b_Ca_unbind" id="CaMCa4pump2b_Ca_unbind">
    <Reactant specieID="CaMCa4pmca2b"/>
    <Product specieID="CaMpmca2b"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0314e-3</forwardRate>
    <reverseRate>152.49e-15</reverseRate>
  </Reaction>

  <Reaction name="CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.0957e-3</forwardRate>
    <reverseRate>1.006e-15</reverseRate>
  </Reaction>
 

  <Reaction name="CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.0614e-3</forwardRate>

  </Reaction>

  <Reaction name="CaMpump2b_Ca_unbind" id="CaMpump2b_Ca_unbind">
    <Reactant specieID="CaMpmca2b"/>
    <Product specieID="pmca2b"/>
    <Product specieID="CaM"/>
    <forwardRate>0.034e-3</forwardRate>
  </Reaction>
  
  
  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>3.e-4</forwardRate>
    <reverseRate>0.3</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.6</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  
  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="reaction1" id="reaction1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM_1_0"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction3" id="reaction3">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_0_1"/>
    <Product specieID="CaM_1_1"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction5" id="reaction5">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="CaM_1_2"/>
    <forwardRate>2.137e-05</forwardRate>
    <reverseRate>0.0398</reverseRate>
  </Reaction>
  <Reaction name="reaction7" id="reaction7">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_0"/>
    <Product specieID="CaMCa2C"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction9" id="reaction9">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_1"/>
    <Product specieID="CaM_2_1"/>
    <forwardRate>0.0009545</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction11" id="reaction11">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.000955</forwardRate>
    <reverseRate>0.933</reverseRate>
  </Reaction>
  <Reaction name="reaction13" id="reaction13">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaM_0_1"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction15" id="reaction15">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_0_1"/>
    <Product specieID="CaMCa2N"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction17" id="reaction17">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_0"/>
    <Product specieID="CaM_1_1"/>
    <forwardRate>0.01075</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction19" id="reaction19">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_1_1"/>
    <Product specieID="CaM_1_2"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>
  <Reaction name="reaction21" id="reaction21">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="CaM_2_1"/>
    <forwardRate>0.010715</forwardRate>
    <reverseRate>794.328</reverseRate>
  </Reaction>
  <Reaction name="reaction23" id="reaction23">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaM_2_1"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.00195</forwardRate>
    <reverseRate>3.63</reverseRate>
  </Reaction>

  
<Specie name="CaCbuf" id="CaCbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="Cbuf" id="Cbuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaBCa" id="CaBCa" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaB" id="CaB" kdiff="10" kdiffunit="mu2/s"/>
  
  <Reaction name="CaIn_buffer" id="CaIn_buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaB"/>
    <Product specieID="CaBCa"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaCbufCa+Cbuf" id="CaCbufCa+Cbuf">
    <Reactant specieID="CaCbuf"/>
    <Product specieID="Cbuf"/>
    <Product specieID="Ca"/>
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="CaOut+CbufNULL" id="CaOut_CbufNULL">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Cbuf"/>
    <forwardRate>1e-06</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
<Specie name="Glu" id="Glu" kdiff="320" kdiffunit="mu2/s"/>
  <Specie name="GluOut" id="GluOut" kdiff="320" kdiffunit="mu2/s"/>
  <Specie name="GluBuf" id="GluBuf" kdiff="320" kdiffunit="mu2/s"/>
  <Specie name="GluGlubuf" id="GluGlubuf" kdiff="320" kdiffunit="mu2/s"/>
  <Specie name="Glubuf" id="Glubuf" kdiff="320" kdiffunit="mu2/s"/>
<Reaction name="Glu--GluOut" id="Glu--GluOut">
    <Reactant specieID="Glu"/>
    <Product specieID="GluOut"/>
  
    <forwardRate>1e-3</forwardRate>
    <reverseRate>4e-9</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  
 
  <Reaction name="GluOut+GluBuf--NULL" id="GluOut_buf--NULL">
    <Reactant specieID="Glu"/>
    <Reactant specieID="GluBuf"/>
    <forwardRate>5e-02</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="GluGlubufGlu+Glubuf" id="GluGlubufGlu+Glubuf">
    <Reactant specieID="GluGlubuf"/>
    <Product specieID="Glubuf"/>
    <Product specieID="Glu"/>
    <forwardRate>20e-03</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  
  <Reaction name="GluOut+GlubufNULL" id="GluOut_GlubufNULL">
    <Reactant specieID="GluOut"/>
    <Reactant specieID="Glubuf"/>
    <forwardRate>1e-05</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  
<Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM" id="RyR2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMC1" id="RyR2CaMC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMC2" id="RyR2CaMC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMC3" id="RyR2CaMC3" kdiff="0" kdiffunit="mu2/s"/>  
  <Specie name="RyR2CaMO1" id="RyR2CaMO1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMO2" id="RyR2CaMO2" kdiff="0" kdiffunit="mu2/s"/>
<Reaction name="RyR2CaMe" id="RyR2CaMe">
    <Reactant specieID="RyR2CaM"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2CaMC1"/>
    <forwardRate>10e-11</forwardRate>
    <reverseRate>1.</reverseRate>
 </Reaction>

  <Reaction name="RyR2CaMa" id="RyR2CaMa">
    <Reactant specieID="RyR2CaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2CaMO1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>4800e-3</reverseRate>
 </Reaction>
   

  <Reaction name="RyR2CaMb" id="RyR2CaMb">
    <Reactant specieID="RyR2CaMO1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2CaMO2"/>
    <forwardRate>5e-12</forwardRate>
    <reverseRate>13</reverseRate>
  </Reaction>

   <Reaction name="RyR2CaMc" id="RyR2CaMc">
    <Reactant specieID="RyR2CaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2CaMO2"/>
    <forwardRate>3.3333e-16</forwardRate>
    <reverseRate>66.667e-2</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaMd" id="RyR2CaMd">
    <Reactant specieID="RyR2CaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2CaMC2"/>
    <forwardRate>10000e-13</forwardRate>
    <reverseRate>1.248e-2</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaMf" id="RyR2CaMf">
    <Reactant specieID="RyR2CaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR2CaMC3"/>
    <forwardRate>1.5e-15</forwardRate>
    <reverseRate>3.</reverseRate>
 </Reaction>

   <Reaction name="RyR2CaMflux1" id="RyR2CaMflux1">
     <Reactant specieID="RyR2CaMO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyR2CaMO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
    </Reaction>
  <Reaction name="RyR2CaMflux2" id="RyR2CaMflux2">
     <Reactant specieID="RyR2CaMO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyR2CaMO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>

<Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca2" id="ER_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca" id="ER_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA" id="ER_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     

  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>2e-4</forwardRate>
    <reverseRate>87.3e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
    
    <forwardRate>1e-4</forwardRate>
    <reverseRate>167.4e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="Cyt_SERCA_1c" id="Cyt_SERCA_1c">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="ER_SERCA_Ca2"/>
    <forwardRate>0.6e-3</forwardRate>
    <reverseRate>0.097e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="CaER"/>
    <Reactant specieID="ER_SERCA"/>
    <Product specieID="ER_SERCA_Ca"/>
    <forwardRate>3e-7</forwardRate>    
    <reverseRate>30.02-e3</reverseRate>

    <Q10>0.2</Q10>
  </Reaction>

  
  <Reaction name="Cyt_SERCA_1e" id="Cyt_SERCA_1e">
    
    <Reactant specieID="CaER"/>
    <Reactant specieID="ER_SERCA_Ca"/>
    <Product specieID="ER_SERCA_Ca2"/>
    <forwardRate>1e-7</forwardRate>    
    <reverseRate>60.04e-3</reverseRate>

    <Q10>0.2</Q10>
  </Reaction>



  <Reaction name="Cyt_SERCA_1f" id="Cyt_SERCA_1f">
    <Reactant specieID="ER_SERCA"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>0.4e-3</forwardRate>
    <reverseRate>1.2e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="PMJ" id="PMJ" kdiff="0." kdiffunit="mu2/s"/>
  <Specie name="PMJ_STIM_4" id="PMJ_STIM_4" kdiff="0." kdiffunit="mu2/s"/>
    
  <Specie name="Orai3STIM_4" id="Orai3STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai2STIM_4" id="Orai2STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="OraiSTIM_4" id="OraiSTIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai" id="Orai" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="STIM_4" id="STIM_4" kdiff="0.01" kdiffunit="mu2/s"/>
  <Specie name="STIM_2" id="STIM_2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="STIM_2CaER" id="STIM_2CaER" kdiff="0" kdiffunit="mu2/s"/>
 
  <Reaction name="SOCE1" id="SOCE1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai3STIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <Product specieID="Ca"/>
    
    <forwardRate>5e-8</forwardRate>
    <reverseRate>5e-8</reverseRate>
  </Reaction>
  <Reaction name="SOCE2" id="SOCE2">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai2STIM_4"/>
    <Product specieID="Orai2STIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-9</forwardRate>
    <reverseRate>1.5e-9</reverseRate>
  </Reaction>

 <Reaction name="SOCE3" id="SOCE3">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-11</forwardRate>
    <reverseRate>1.5e-11</reverseRate>
  </Reaction>
   

  <Reaction name="STIM_dim_1" id="STIM_dim_1">
    <Reactant specieID="STIM_2" power="2"/>
    <Product specieID="STIM_4"/>
    <forwardRate>4.8e-7</forwardRate>
    <reverseRate>11e-5</reverseRate>
  </Reaction>
  

  <Reaction name="STIMCaER_1" id="STIMCaER_1">
    <Reactant specieID="STIM_2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="STIM_2CaER"/>
    <forwardRate>1.12e-6</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ" id="STIM_PMJ">
    <Reactant specieID="STIM_4"/>
    <Reactant specieID="PMJ"/>
    <Product specieID="PMJ_STIM_4"/>
    <Product specieID="PMJ"/>
    <forwardRate>1.8e-4</forwardRate>
    <reverseRate>3e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ_Orai" id="STIM_PMJ_Orai">
    <Reactant specieID="Orai"/>
    <Reactant specieID="PMJ_STIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <forwardRate>1.5e-04</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai2" id="STIM_Orai2">
    <Reactant specieID="OraiSTIM_4" power="2"/>
    <Product specieID="Orai2STIM_4"/>
    <forwardRate>3.75e-5</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai4" id="STIM_Orai4">
    <Reactant specieID="Orai2STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <forwardRate>9.375e-06</forwardRate>
    <reverseRate>5e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai8" id="STIM_Orai8">
    <Reactant specieID="Orai3STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai2STIM_4" power="2"/>
    <forwardRate>9.375e-06</forwardRate>

  </Reaction>

  
<Specie name="MgluR" id="MgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluR" id="GluMgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="MgluRGq" id="MgluRGq" kdiff="0" kdiffunit="mu2/s"/> 
  <Specie name="Gqabg" id="Gqabg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq" id="GluMgluRGq" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGTP" id="GqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGDP" id="GqaGDP" kdiff="0" kdiffunit="mu2/s"/>  

  <Specie name="Plc" id="Plc" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcPip2" id="PlcPip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCa" id="PlcCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTP" id="PlcCaGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcGqaGTP" id="PlcGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcGqaGTPPip2" id="PlcGqaGTPPip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Pip2" id="Pip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Dag" id="Dag" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="DagK" id="DagK" kdiff="3" kdiffunit="mu2/s"/>
  <Specie name="DagKdag" id="DagKdag" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PA" id="PA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PI" id="PI" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PI4P" id="PI4P" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="PlcCaPip2" id="PlcCaPip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTPPip2" id="PlcCaGqaGTPPip2" kdiff="0" kdiffunit="mu2/s"/>
 
 
  <Specie name="IP4" id="IP4" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="IP2" id="IP2" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="I" id="I" kdiff="10" kdiffunit="mu2/s"/>
<Specie name="IP3" id="IP3" kdiff="20." kdiffunit="mu2/s"/>

  <Specie name="IP3K" id="IP3K" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_IP3" id="IP3K_IP3" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P" id="IP5P" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2" id="IP3K_Ca2" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP3" id="IP5P_IP3" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP4" id="IP5P_IP4" kdiff="2." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2_IP3" id="IP3K_Ca2_IP3" kdiff="2." kdiffunit="mu2/s"/>

<Reaction name="Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="GluMgluR"/>

        <forwardRate> 11.11e-7</forwardRate>
        <reverseRate>100e-4     </reverseRate>
    </Reaction>

    <Reaction name="Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate>  0.009e-03  </forwardRate>
        <reverseRate>   1.36e-03  </reverseRate>
    </Reaction>

  <Reaction name="Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="MgluRGq"/>

        <forwardRate> 2.4997500000000005e-06 </forwardRate>
        <reverseRate> 1.36e-03 </reverseRate>
   </Reaction>

   <Reaction name="Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluRGq"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate>  2e-7 </forwardRate>
        <reverseRate> 0.5e-03 </reverseRate>
   </Reaction>

   <Reaction name="GluMgluRGq--GqaGTP+GluMgluRGbg" id="GluMgluRGq--GqaGTP+GluMgluRGbg">
        <Reactant specieID="GluMgluRGq"/>
        <Product specieID="GqaGTP"/>
        <Product specieID="GluMgluR"/> 
  
        <forwardRate>  1.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

 

 
  <Reaction name="Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcCa"/>

    <forwardRate> 300e-6   </forwardRate>
    <reverseRate> 100e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  
  <Reaction name="PlcCa+GqaGTP--PlcCaGqaGTP" id="PlcCa+GqaGTP--PlcCaGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcCa"/>
    <Product specieID="PlcCaGqaGTP"/>    
    <forwardRate> 7e-04   </forwardRate>
    <reverseRate> 7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  <Reaction name="Plc+GqaGTP--PlcGqaGTP" id="Plc+GqaGTP--PlcGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcGqaGTP"/>

    <forwardRate> 14e-04   </forwardRate>
    <reverseRate> 7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcGqaGTP+Ca--PlcCaGqaGTP" id="PlcGqaGTP+Ca--PlcCaGqaGTP">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 300e-6   </forwardRate>
    <reverseRate> 200.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


 
  <Reaction name="PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
    <Reactant specieID="PlcCa"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaPip2"/>
    
    <forwardRate> 6e-8   </forwardRate>
    <reverseRate> 1.2e-4   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


  
  
<Reaction name="Plc+Pip2--PlcPip2" id="Plc+Pip2--PlcPip2">
    <Reactant specieID="Plc"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcPip2"/>
    
    <forwardRate> 1e-6   </forwardRate>
    <reverseRate> 2e-3   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


  <Reaction name="PlcPip2+Ca--PlcCaPip2" id="PlcPip2+Ca--PlcCaPip2">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PlcPip2"/>
    <Product specieID="PlcCaPip2"/>

    <forwardRate> 300e-6   </forwardRate>
    <reverseRate> 100e-3        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


  <Reaction name="PlcPip2+Gqa--PlcPip2GqaGTP" id="PlcPip2+Gqa--PlcPip2GqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcPip2"/>
    <Product specieID="PlcGqaGTPPip2"/>

    <forwardRate> 14e-04   </forwardRate>
    <reverseRate> 7e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcGqaGTP+Pip2--PlcPip2GqaGTP" id="PlcGqaGTP+Pip2--PlcPip2GqaGTP">
    <Reactant specieID="PlcGqaGTP"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcGqaGTPPip2"/>

    <forwardRate> 2e-6   </forwardRate>
    <reverseRate> 4e-3        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 <Reaction name="PlcGqaGTPPip2+Ca--PlcCaGqaGTPPip2" id="PlcGqaGTPPip2+Ca--PlcCaPip2GqaGTP">
    <Reactant specieID="PlcGqaGTPPip2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="PlcCaGqaGTPPip2"/>

    <forwardRate> 300e-6   </forwardRate>
    <reverseRate> 200e-3        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
   

<Reaction name="PlcCaPip2+GqaGTP--PlcCaPip2GqaGTP" id="PlcCaPip2+GqaGTP--PlcPip2GqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcCaPip2"/>
    <Product specieID="PlcCaGqaGTPPip2"/>

    <forwardRate> 7e-04   </forwardRate>
    <reverseRate> 7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  

  <Reaction name="PlcCaPip2--PlcCaDag+IP3" id="PlcCaPip2--PlcCaDag+IP3">
    <Reactant specieID="PlcCaPip2"/>
    <Product specieID="PlcCa"/>
    <Product specieID="IP3"/>
    <Product specieID="Dag"/>
    
    <forwardRate> 0.3e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>




  <Reaction name="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2" id="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaGqaGTPPip2"/>
    
    <forwardRate>  30e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3" id="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3">
    <Reactant specieID="PlcCaGqaGTPPip2"/>
    <Product specieID="PlcCaGqaGTP"/>
    <Product specieID="IP3"/>
    <Product specieID="Dag"/>
    
    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
  </Reaction>
<Reaction name="PlcGqa--Plc+GqaGDP" id="PlcGqa--Plc+GqaGDP">
        <Reactant specieID="PlcGqaGTP"/>
        <Product specieID="Plc"/>
        <Product specieID="GqaGDP"/>

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

<Reaction name="PlcCaGqa--PlcCa+GaGDP" id="PlcCaGqa--Plc+GaGDP">
        <Reactant specieID="PlcCaGqaGTP"/>
        <Product specieID="PlcCa"/>
        <Product specieID="GqaGDP"/>

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>
  


	<Reaction name="DagKdag1" id="DagKdag1">
         <Reactant specieID="Dag"/>
         <Reactant specieID="DagK"/>
         <Product specieID="DagKdag"/>

        <forwardRate> 0.00007e-03    </forwardRate>
        <reverseRate> 0.8e-3         </reverseRate>
    </Reaction>

    <Reaction name="DagKdag2" id="DagKdag2">
      <Reactant specieID="DagKdag"/>
      <Product specieID="PA"/>
      <Product specieID="DagK"/>

      <forwardRate> 2e-03      </forwardRate>
      <reverseRate> 0.0e-03      </reverseRate>
    </Reaction>
    
  <Reaction name="IP3--IP5P" id="IP3--IP5P">
    <Reactant specieID="IP3"/>
    <Reactant specieID="IP5P"/>
    <Product specieID="IP5P_IP3"/>
    
    <forwardRate> 2.52e-06      </forwardRate>
    <reverseRate> 72e-04      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3--IP5P-degrad" id="IP3--IP5P-degrad">
    <Reactant specieID="IP5P_IP3"/>
    <Product specieID="IP5P"/>
    <Product specieID="IP2"/>
    <forwardRate> 18e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 <Reaction name="IP4--IP5P" id="IP4--IP5P">
    <Reactant specieID="IP4"/>
    <Reactant specieID="IP5P"/>
    <Product specieID="IP5P_IP4"/>
    
    <forwardRate> 1.6e-5      </forwardRate>
    <reverseRate> 72e-04      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP4--IP5P-degrad" id="IP4--IP5P-degrad">
    <Reactant specieID="IP5P_IP4"/>
    <Product specieID="IP5P"/>
    <Product specieID="IP3"/>
    <forwardRate> 6e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K--2Ca" id="IP3K--2Ca">
    <Reactant specieID="IP3K"/>
    <Reactant specieID="CaMCa4"/>
    <Product specieID="IP3K_Ca2"/>
    
    <forwardRate> 0.002      </forwardRate>
    <reverseRate> 10e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K2Ca--IP3" id="IP3K2Ca--IP3">
    <Reactant specieID="IP3K_Ca2"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3K_Ca2_IP3"/>

    <forwardRate> 100e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name="IP3K2CaIP3" id="IP3K2CaIP3">
  <Reactant specieID="IP3K_Ca2_IP3"/>
  <Product specieID="IP4"/>
  <Product specieID="IP3K_Ca2"/>

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>


<Reaction name="IP3K--IP3" id="IP3K--IP3">
    <Reactant specieID="IP3K"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3K_IP3"/>

    <forwardRate> 33e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name="IP3KIP3" id="IP3KIP3">
  <Reactant specieID="IP3K_IP3"/>
  <Product specieID="IP4"/>
  <Product specieID="IP3K"/>

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>





<Reaction name="I2-to-I" id="I2-to-I">
    <Reactant specieID="IP2"/>   
    <Product specieID="I"/>

    <forwardRate> 2.0e-4    </forwardRate>
    <reverseRate> 0    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>


<Reaction name="PA-to-PI" id="PA-to-PI">
  <Reactant specieID="PA"/>
  <Reactant specieID="I"/>   
  <Product specieID="PI"/>

    <forwardRate> 1e-4  </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PI-to-PI4P" id="PI-to-PI4P">
    <Reactant specieID="PI"/>   
    <Product specieID="PI4P"/>

    <forwardRate> 2.16e-5    </forwardRate>
    <reverseRate> 0.116e-3    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PI4P-to-PIP2" id="PI4P-to-PIP2">
    <Reactant specieID="PI4P"/>   
    <Product specieID="Pip2"/>

    <forwardRate> 1.5e-5    </forwardRate>
    <reverseRate> 0.000162  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PlcGqaGTP--Plc+GqaGDP" id="PlcGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="Plc"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PlcCaGqaGTP--PlcCa+GqaGDP" id="PlcCaGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Product specieID="PlcCa"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<Reaction name="GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"/>
  <Product specieID="Gqabg"/>

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>




    

<Specie name="IP3R" id="IP3R" kdiff="0" kdiffunit="mu2/s"/> <Specie name="IP3RIP3" id="IP3RIP3" kdiff="0" kdiffunit="mu2/s"/> <Specie name="IP3RC" id="IP3RC" kdiff="0" kdiffunit="mu2/s"/> <Specie name="IP3RA11" id="IP3RA11" kdiff="0" kdiffunit="mu2/s"/> <Specie name="IP3RPa" id="IP3RPa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RPb" id="IP3RPb" kdiff="0" kdiffunit="mu2/s"/> 
  <Specie name="IP3RC2" id="IP3RC2" kdiff="0" kdiffunit="mu2/s"/> <Specie name="IP3RSa" id="IP3RSa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RSb" id="IP3RSb" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RIa" id="IP3RIa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RIb" id="IP3RIb" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RO" id="IP3RO" kdiff="0" kdiffunit="mu2/s"/> <Specie name="IP3ROb" id="IP3ROb" kdiff="0" kdiffunit="mu2/s"/> <Specie name="IP3ROc" id="IP3ROc" kdiff="0" kdiffunit="mu2/s"/>

  
  <Reaction name="IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3RIP3"/>

    <forwardRate> 6676e-6   </forwardRate>
    <reverseRate> 200e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3R+Ca" id="IP3R+Ca">
    <Reactant specieID="IP3R"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RC"/>

    <forwardRate> 5000e-6   </forwardRate>
    <reverseRate> 1e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RC--IP3RPa" id="IP3RC-IP3RPa">
    <Reactant specieID="IP3RC"/>
    <Product specieID="IP3RPa"/>

    <forwardRate> 0.3e-3   </forwardRate>
    <reverseRate> 700e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RPa--IP3RPb" id="IP3RPa-IP3RPb">
    <Reactant specieID="IP3RPa"/>
    <Product specieID="IP3RPb"/>

    <forwardRate> 500e-3   </forwardRate>
    <reverseRate> 100e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
 
  <Reaction name="IP3RPb+CaER" id="IP3RPb+CaER">
    <Reactant specieID="IP3RPb"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3RC2"/>

    <forwardRate> 5000e-6   </forwardRate>
    <reverseRate> 150e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RC2--IP3RSa" id="IP3RC2-IP3RSa">
    <Reactant specieID="IP3RC2"/>
    <Product specieID="IP3RSa"/>

    <forwardRate> 3000e-3   </forwardRate>
    <reverseRate> 250e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RSa+Ca--IP3RSb" id="IP3RSa+Ca-IP3RSb">
    <Reactant specieID="IP3RSa"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RSb"/>

    <forwardRate> 5000e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


   <Reaction name="IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RA11"/>

    <forwardRate> 500e-6   </forwardRate>
    <reverseRate> 667e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


  <Reaction name="IP3RC+IP3" id="IP3RC+IP3">
    <Reactant specieID="IP3RC"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3RA11"/>

    <forwardRate> 1540e-6   </forwardRate>
    <reverseRate> 18e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


  <Reaction name="IP3RA11--Oa" id="IP3RA11--Oa">
    <Reactant specieID="IP3RA11"/>
    <Product specieID="IP3RO"/>

    <forwardRate> 1800e-3   </forwardRate>
    <reverseRate> 330e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="Oa--Ob" id="Oa--Ob">
    <Reactant specieID="IP3RO"/>
    <Product specieID="IP3ROb"/>

    <forwardRate> 133e-3   </forwardRate>
    <reverseRate> 1500e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="Ob+CaER--Oc" id="Ob+CaER--Oc">
    <Reactant specieID="IP3ROb"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3ROc"/>

    <forwardRate> 70e-6   </forwardRate>
    <reverseRate> 2000e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name="Oc--Ia" id="Oc--Ia">
    <Reactant specieID="IP3ROc"/>
    <Product specieID="IP3RIa"/>

    <forwardRate> 630e-3   </forwardRate>
    <reverseRate> 400e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RIa+Ca--IP3RIb" id="IP3RIa+Ca--IP3RIb">
    <Reactant specieID="IP3RIa"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RIb"/>

    <forwardRate> 60e-6   </forwardRate>
    <reverseRate> 16e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>


  
<Reaction name="IP3R_Oa-flux_Ia" id="IP3R_Oa-fluxa">
    <Reactant specieID="IP3RO"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3RO"/>
    <Product specieID="Ca"/>

    <forwardRate> 4e-5 </forwardRate>
    <reverseRate> 4e-05      </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>

   <Reaction name="IP3R_Ob-flux_Ia" id="IP3R_Ob-fluxa">
    <Reactant specieID="IP3ROb"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3ROb"/>
    <Product specieID="Ca"/>

    <forwardRate> 4e-5 </forwardRate>
    <reverseRate> 4e-05      </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>

   <Reaction name="IP3R_Oc-flux_Ia" id="IP3R_Oc-fluxa">
    <Reactant specieID="IP3ROc"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3ROc"/>
    <Product specieID="Ca"/>

    <forwardRate> 4e-5 </forwardRate>
    <reverseRate> 4e-05      </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>


 <Specie name="RyR3CaM" id="RyR3CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMC1" id="RyR3CaMC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMC2" id="RyR3CaMC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMC3" id="RyR3CaMC3" kdiff="0" kdiffunit="mu2/s"/>  
  <Specie name="RyR3CaMO1" id="RyR3CaMO1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMO2" id="RyR3CaMO2" kdiff="0" kdiffunit="mu2/s"/>
<Reaction name="RyR3CaMe" id="RyR3CaMe">
    <Reactant specieID="RyR3CaM"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR3CaMC1"/>
    <forwardRate>1.44e-09</forwardRate>
    <reverseRate>0.2222</reverseRate>
 </Reaction>

  <Reaction name="RyR3CaMa" id="RyR3CaMa">
    <Reactant specieID="RyR3CaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR3CaMO1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>9600e-3</reverseRate>
 </Reaction>
   

  <Reaction name="RyR3CaMb" id="RyR3CaMb">
    <Reactant specieID="RyR3CaMO1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR3CaMO2"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>13</reverseRate>
  </Reaction>

   <Reaction name="RyR3CaMc" id="RyR3CaMc">
    <Reactant specieID="RyR3CaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR3CaMO2"/>
    <forwardRate>3.3333e-14</forwardRate>
    <reverseRate>66.667e-2</reverseRate>
  </Reaction>

  <Reaction name="RyR3CaMd" id="RyR3CaMd">
    <Reactant specieID="RyR3CaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR3CaMC2"/>
    <forwardRate>5000e-16</forwardRate>
    <reverseRate>1.235e-4</reverseRate>
  </Reaction>

  <Reaction name="RyR3CaMf" id="RyR3CaMf">
    <Reactant specieID="RyR3CaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyR3CaMC3"/>
    <forwardRate>1e-12</forwardRate>
    <reverseRate>4.5</reverseRate>
 </Reaction>

   <Reaction name="RyR3CaMflux1" id="RyR3CaMflux1">
     <Reactant specieID="RyR3CaMO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyR3CaMO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  <Reaction name="RyR3CaMflux2" id="RyR3CaMflux2">
     <Reactant specieID="RyR3CaMO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyR3CaMO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
<Specie name="Cyt_SERCA3" id="Cyt_SERCA3" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA3_Ca" id="Cyt_SERCA3_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA3_Ca2" id="Cyt_SERCA3_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Reaction name="Cyt_SERCA3_1a" id="Cyt_SERCA3_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA3"/>
    <Product specieID="Cyt_SERCA3_Ca"/>
    
    <forwardRate>6000e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA3_1b" id="Cyt_SERCA3_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA3_Ca"/>
    <Product specieID="Cyt_SERCA3_Ca2"/>
        
    <forwardRate>6000e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA3_1d" id="Cyt_SERCA3_1d">
    <Reactant specieID="Cyt_SERCA3_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA3"/>
    <forwardRate>140e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Specie name="NMDARC" id="NMDARC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC1" id="NMDARC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC2" id="NMDARC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARD" id="NMDARD" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARO" id="NMDARO" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARCB" id="NMDARCB" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC1B" id="NMDARC1B" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARC2B" id="NMDARC2B" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDARDB" id="NMDARDB" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NMDAROB" id="NMDAROB" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="V" id="V" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="VOut" id="VOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="VBuf" id="VBuf" kdiff="10" kdiffunit="mu2/s"/>
<Reaction name="NMDARC-C1" id="NMDARC-C1">
    <Reactant specieID="NMDARC"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC1"/>
    <forwardRate>2e-5</forwardRate>
    <reverseRate>11e-3</reverseRate>
 </Reaction>

  <Reaction name="NMDARC1-C2" id="NMDARC1-C2">
    <Reactant specieID="NMDARC1"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC2"/>
    <forwardRate>16.8e-3</forwardRate>
    <reverseRate>3.6e-3</reverseRate>
 </Reaction>
   

  <Reaction name="NMDARC2-D" id="NMDARC2-D">
    <Reactant specieID="NMDARC2"/>
    <Product specieID="NMDARD"/>
    <forwardRate>8.4e-3</forwardRate>
    <reverseRate>6.8e-3</reverseRate>
  </Reaction>

   <Reaction name="NMDARC2-0" id="NMDARC2-0">
    <Reactant specieID="NMDARC2"/>
    <Product specieID="NMDARO"/>
    <forwardRate>93e-3</forwardRate>
    <reverseRate>183.2e-3</reverseRate>
  </Reaction>


  <Reaction name="NMDARCB-C1B" id="NMDARCB-C1B">
    <Reactant specieID="NMDARCB"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC1B"/>
    <forwardRate>2e-5</forwardRate>
    <reverseRate>11e-3</reverseRate>
 </Reaction>

  <Reaction name="NMDARC1B-C2B" id="NMDARC1-C2B">
    <Reactant specieID="NMDARC1B"/>
    <Reactant specieID="Glu"/>
    <Product specieID="NMDARC2B"/>
    <forwardRate>1e-6</forwardRate>
    <reverseRate>22e-3</reverseRate>
 </Reaction>
   

  <Reaction name="NMDARC2B-DB" id="NMDARC2B-DB">
    <Reactant specieID="NMDARC2B"/>
    <Product specieID="NMDARDB"/>
    <forwardRate>16.8e-3</forwardRate>
    <reverseRate>3.6e-3</reverseRate>
  </Reaction>

   <Reaction name="NMDARC2B-0B" id="NMDARC2B-0B">
    <Reactant specieID="NMDARC2B"/>
    <Product specieID="NMDAROB"/>
    <forwardRate>97e-3</forwardRate>
    <reverseRate>574e-3</reverseRate>
  </Reaction>

  <Reaction name="NMDAROB-NMDARO" id="NMDAROB-NMDARO">
    <Reactant specieID="NMDAROB"/>
    <Reactant specieID="V"/>
    <Product specieID="NMDARO"/>
    <Product specieID="V"/>
    <forwardRate>20</forwardRate>
    <reverseRate>1</reverseRate>
  </Reaction>

  <Reaction name="NMDARO-NMDAROB" id="NMDARO-NMDAROB">
    <Reactant specieID="NMDARO"/>
    <Product specieID="NMDAROB"/>
    <forwardRate>65</forwardRate>
  </Reaction>

  <Reaction name="NMDAROflux" id="NMDARO-flux">
    <Reactant specieID="NMDARO"/>
    <Reactant specieID="CaOut"/>
    <Product specieID="NMDARO"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-5</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  

   <Reaction name="V--VOut" id="V--VOut">
    <Reactant specieID="V"/>
    <Product specieID="VOut"/>
  
    <forwardRate>0.5e-1</forwardRate>
    <reverseRate>0.02e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
   <Reaction name="V+VBuf-\-NULL" id="V_buf-\-NULL"> 
     <Reactant specieID="V"/> 
     <Reactant specieID="VBuf"/> 
     <forwardRate>5e-05</forwardRate> 
   <reverseRate>0</reverseRate> 
  </Reaction> 

  <Specie name="Dye" id="Dye" kdiff="75" kdiffunit="mu2/s"/>
  <Specie name="CaDye" id="CaDye" kdiff="75" kdiffunit="mu2/s"/>
<Reaction name="CaDye_buffer" id="CaDye_buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Dye"/>
    <Product specieID="CaDye"/>

    <forwardRate>5e-4</forwardRate>
    <reverseRate>0.75</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
</ReactionScheme>
